PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new_STLI
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Routines
  Routine trial
    ImageComponent Topleft
      image [set every repeat] = C:\Users\Ram\OneDrive - University of Sussex\Desktop\LZ correlation\LZ_correlation\test\Alcohol 5.jpg
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Topright
      image = C:\Users\Ram\OneDrive - University of Sussex\Desktop\LZ correlation\LZ_correlation\test\Alcohol 8.jpg
      pos = (0.25 , 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomleft
      image = C:\Users\Ram\OneDrive - University of Sussex\Desktop\LZ correlation\LZ_correlation\test\Astronaut 1.jpg
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomright
      image = C:\Users\Ram\OneDrive - University of Sussex\Desktop\LZ correlation\LZ_correlation\test\Baby 1.jpg
      pos = (0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    TextComponent Fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'a','z','k','m'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      syncScreenRefresh = False
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  Routine rsvp
    PolygonComponent Cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $image1
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = $image2
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image [set every repeat] = $image3
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_4
      image [set every repeat] = $image4
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
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  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        End
Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = index.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('image1', 'images\\Alcohol 5.jpg'), ('image2', 'images\\Alcohol 8.jpg'), ('image3', 'images\\Astronaut 1.jpg'), ('image4', 'images\\Baby 1.jpg')]),
      OrderedDict([('trial', 2), ('image1', 'images\\Baby 2.jpg'), ('image2', 'images\\Baby 3.jpg'), ('image3', 'images\\Baby 4.jpg'), ('image4', 'images\\Baby 5.jpg')])]
    Routine rsvp
    Routine trial
  LoopTerminator trials
  Routine End
