PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = new_STLI_updated
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press the Space key to start the experiment

        During the choice section , Press the key 'a' for was present in stream and 'l' for was not present in stream
    KeyboardComponent Welcome_enter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        End
  Routine Break
    TextComponent text_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Time for a break

        Press either of the keys "v" , "b" or "n" to continue when ready
    KeyboardComponent key_resp_2
      allowedKeys = 'v','n','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ParallelOutComponent EEG_trigger_break
      address = 0xD010
      disabled = True
      durationEstim = 4
      startData = 67
      startVal [time (s)] = 0
      stopData = 0
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f1
    ImageComponent Presentation_image_f1_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ParallelOutComponent EEG_trigger_f1
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine choice
    PolygonComponent Fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent displayed_choice_image
      image [set every repeat] = $choice_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine rsvp_f2
    ImageComponent Presentation_image_f2_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.45
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    ParallelOutComponent EEG_trigger_f2
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f3
    ImageComponent Presentation_image_f3_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.30
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    ImageComponent Presentation_image_f3_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent EEG_trigger_f3
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine Cross_and_control
    PolygonComponent Crossm
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent Freq_choice_control
      Code Type = Py
      Begin Routine:
        if frequency == 1:
            dofone = 1
            doftwo = 0
            dofthree = 0
            doffour = 0

        elif frequency == 2:
            dofone = 0
            doftwo = 1
            dofthree = 0
            doffour = 0

        elif frequency == 3:
            dofone = 0
            doftwo = 0
            dofthree = 1
            doffour = 0

        elif frequency == 4:
            dofone = 0
            doftwo = 0
            dofthree = 0
            doffour = 1
  Routine rsvp_f4
    ImageComponent Presentation_image_f4_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.20
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    ImageComponent Presentation_image_f4_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 1.50
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.50
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_13
      image [set every repeat] = $imagethirteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f3_14
      image [set every repeat] = $imagefourteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_15
      image [set every repeat] = $imagefifteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_16
      image [set every repeat] = $imagesixteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.75
      stopVal [duration (s)] = 0.2
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    ParallelOutComponent EEG_trigger_f4
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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Flow
  Routine Welcome
  LoopInitiator block_one loopType="TrialHandler"
    conditionsFile = stim_present_data_block_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_137.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_129.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_89.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_97.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1.0), ('choice_image', 'LZ_natural\\LZ_natural_89.jpg'), ('choice_type', 1.0), ('correct_answer', 'a'), ('sti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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_200.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_16.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_65.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_19.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1.0), ('choice_image', 'LZ_noise\\LZ_noise_228.jpg'), ('choice_type', 0.0), ('correct_answer', 'l'), ('stimulus_type', 3.0), ('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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_163.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_172.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_238.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_191.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_175.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_112.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_129.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_149.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_1.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_176.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_202.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_236.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_133.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_138.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_56.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_168.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_129.jpg'), ('imageten', 'LZ_noise\\LZ_noise_134.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_47.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_4.jpg'), ('imagethirteen', None), ('imagefourteen', None), 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
    Routine Cross_and_control
    LoopInitiator fone_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b1
    LoopInitiator ftwo_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b1
    LoopInitiator fthree_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b1
    LoopInitiator ffour_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doffour
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      Routine rsvp_f4
    LoopTerminator ffour_control_b1
    Routine choice
  LoopTerminator block_one
  Routine Break
  LoopInitiator block_two loopType="TrialHandler"
    conditionsFile = stim_present_data_block_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_noise\\LZ_noise_93.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_92.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_78.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_129.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_61.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_193.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_156.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_38.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 2), ('choice_image', 'LZ_noise\\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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_110.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_76.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_32.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_229.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_174.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_63.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_210.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_190.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 2), ('choice_image', 'LZ_noise\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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_60.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_82.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_148.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_48.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_82.jpg'), ('choice_type', 1), ('correct_answer', 'a'), ('stimulus_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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_127.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_228.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_235.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_185.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_noise\\LZ_noise_22.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stimulus_type', 3), ('cond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
    Routine Cross_and_control
    LoopInitiator fone_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b2
    LoopInitiator ftwo_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b2
    LoopInitiator fthree_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b2
    LoopInitiator ffour_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doffour
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      Routine rsvp_f4
    LoopTerminator ffour_control_b2
    Routine choice
  LoopTerminator block_two
  Routine Break
  LoopInitiator block_three loopType="TrialHandler"
    conditionsFile = stim_present_data_block_3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_221.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_20.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_207.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_223.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_88.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_234.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_2.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_182.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency',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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_99.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_42.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_33.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_237.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_207.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_62.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_126.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_206.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imag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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_11.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_237.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_116.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_114.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_noise\\LZ_noise_222.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stimulus_type', 3), ('cond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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_86.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_123.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_57.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_198.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_57.jpg'), ('choice_type', 1), ('correct_answer', 'a'), ('stimulus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
    Routine Cross_and_control
    LoopInitiator fone_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b3
    LoopInitiator ftwo_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b3
    LoopInitiator fthree_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b3
    LoopInitiator ffour_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doffour
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      Routine rsvp_f4
    LoopTerminator ffour_control_b3
    Routine choice
  LoopTerminator block_three
  Routine Break
  LoopInitiator block_four loopType="TrialHandler"
    conditionsFile = stim_present_data_block_4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_noise\\LZ_noise_215.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_26.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_79.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_16.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1.0), ('choice_image', 'LZ_noise\\LZ_noise_13.jpg'), ('choice_type', 0.0), ('correct_answer', 'l'), ('stimulus_type', 3.0), ('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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_142.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_57.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_181.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_34.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_36.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_54.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_91.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_203.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_117.jpg'), ('imageten', 'LZ_noise\\LZ_noise_160.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_43.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_123.jpg'), ('imagethirteen', None), ('imagefourteen', None), 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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_175.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_85.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_115.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_32.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_189.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_92.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_158.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_128.jpg'), ('imagenine', 'LZ_scrambled\\LZ_scrambled_103.jpg'), ('imageten', 'LZ_scrambled\\LZ_scrambled_83.jpg'), ('imageeleven', 'LZ_scrambled\\LZ_scrambled_163.jpg'), ('image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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_161.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_198.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_162.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_123.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_107.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_78.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_213.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_51.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_234.jpg'), ('imageten', 'LZ_natural\\LZ_natural_231.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_115.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_191.jpg')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
    Routine Cross_and_control
    LoopInitiator fone_control_b4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b4
    LoopInitiator ftwo_control_b4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b4
    LoopInitiator fthree_control_b4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b4
    Routine choice
  LoopTerminator block_four
  Routine Break
  LoopInitiator block_five loopType="TrialHandler"
    conditionsFile = stim_present_data_block_5.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_83.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_20.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_113.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_233.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1.0), ('choice_image', 'LZ_scrambled\\LZ_scrambled_56.jpg'), ('choice_type', 0.0), ('correct_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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_178.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_27.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_72.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_102.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_185.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_204.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_21.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_90.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_18.jpg'), ('imageten', 'LZ_natural\\LZ_natural_73.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_184.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_136.jpg'), ('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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_141.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_111.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_160.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_95.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_47.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_94.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_134.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_172.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_192.jpg'), ('imageten', 'LZ_noise\\LZ_noise_212.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_84.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_88.jpg'), ('imagethirteen', None), ('imagefourteen', None),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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_22.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_209.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_28.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_219.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_52.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_130.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_151.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_35.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_59.jpg'), ('imageten', 'LZ_noise\\LZ_noise_170.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_175.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_206.jpg'), ('imagethirteen', None), ('imagefourteen', None),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
    Routine Cross_and_control
    LoopInitiator fone_control_b5 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b5
    LoopInitiator ftwo_control_b5 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b5
    LoopInitiator fthree_control_b5 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b5
    Routine choice
  LoopTerminator block_five
  Routine End
